PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = posttest_order_1
  keyboardBackend = ioHub
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Routines
  Routine response
    TextComponent question
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Which sound was the same as the one heard in the scanner?

        Press the [Z] if it was the GREEN sound. Press the [M] if it was the YELLOW sound.
    ImageComponent left_answer
      image = left_symbol.png
      pos = (-0.5, 0.0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent right_answer
      image = right_symbol.png
      pos = (0.5, 0.0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'z', 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sounds
    ImageComponent left_sound_symbol
      image = left_symbol.png
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    SoundComponent left_sound
      sound [set every repeat] = $l_sound_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent right_sound_symbol
      image = right_symbol.png
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.5
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    SoundComponent right_sound
      sound [set every repeat] = $r_sound_2
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.5
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  Routine instructions_1
    TextComponent instructions_text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be listening to some sounds. Some of the sounds will be the same as what you heard in the scanner. Some of them will be different.

        You will be asked which sound is the same as what you heard in the scanner.

        Click the [SPACE] bar to continue to the next slide.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_2
    TextComponent instructions_text_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        One sound will play on the left side of the screen, denoted by a GREEN sound symbol. The other sound will play on the right side of the screen, denoted by a YELLOW sound symbol. You must choose which sound (the GREEN or the YELLOW) was the same as what you heard in the scanner.

        Click the [SPACE] bar to continue to the next slide.
    ImageComponent left_sound_symbol_2
      image = left_symbol.png
      pos = (-0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent right_sound_symbol_2
      image = right_symbol.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine get_ready
    TextComponent get_ready_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Are you ready to begin? Press the [SPACE] bar to start.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reset
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine instructions_1
  Routine instructions_2
  Routine get_ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('r_sound', 'pi_tu_bi.wav'), ('l_sound', 'tu_bi_pi.wav'), ('correct', 'z')]),
      OrderedDict([('r_sound', 'pa_bu_da.wav'), ('l_sound', 'bu_pa_da.wav'), ('correct', 'm')]),
      OrderedDict([('r_sound', 'ba_di_pu.wav'), ('l_sound', 'di_ba_pu.wav'), ('correct', 'm')]),
      OrderedDict([('r_sound', 'ta_ti_du.wav'), ('l_sound', 'du_ti_ta.wav'), ('correct', 'z')])]
    Routine sounds
    Routine reset
    Routine response
  LoopTerminator trials
