PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = exposure_order_1
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will be listening to some sounds while in the scanner.
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    KeyboardComponent trigger_catch
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exposure
    SoundComponent sound_stim
      sound [set every repeat] = $order_1
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('r_sound_1', 'pi_tu_bi.wav'), ('l_sound_1', 'tu_bi_pi.wav'), ('correct_1', 'z'), ('r_sound_2', 'du_ti_ta.wav'), ('l_sound_2', 'ta_ti_du.wav'), ('correct_2', 'm'), ('order_1', 'ta.wav'), ('order_2', 'di.wav')]),
      OrderedDict([('r_sound_1', 'pa_bu_da.wav'), ('l_sound_1', 'bu_pa_da.wav'), ('correct_1', 'm'), ('r_sound_2', 'di_ba_pu.wav'), ('l_sound_2', 'ba_di_pu.wav'), ('correct_2', 'z'), ('order_1', 'ti.wav'), ('order_2', 'ba.wav')]),
      OrderedDict([('r_sound_1', 'ba_di_pu.wav'), ('l_sound_1', 'di_ba_pu.wav'), ('correct_1', 'm'), ('r_sound_2', 'bu_pa_da.wav'), ('l_sound_2', 'pa_bu_da.wav'), ('correct_2', 'z'), ('order_1', 'du.wav'), ('order_2', 'pu.wav')]),
      OrderedDict([('r_sound_1', 'ta_ti_du.wav'), ('l_sound_1', 'du_ti_ta.wav'), ('correct_1', 'z'), ('r_sound_2', 'tu_bi_pi.wav'), ('l_sound_2', 'pi_tu_bi.wav'), ('correct_2', 'm'), ('order_1', 'pi.wav'), ('order_2', 'ta.wav')]),
      OrderedDict([('r_sound_1', None), ('l_sound_1', None), ('correct_1', None), ('r_sound_2', None), ('l_sound_2', None), ('correct_2', None), ('order_1', 'tu.wav'), ('order_2', 'ti.wav')]),
      OrderedDict([('r_sound_1', None), ('l_sound_1', None), ('correct_1', None), ('r_sound_2', None), ('l_sound_2', None), ('correct_2', None), ('order_1', 'bi.wav'), ('order_2', 'du.wav')]),
      OrderedDict([('r_sound_1', None), ('l_sound_1', None), ('correct_1', None), ('r_sound_2', None), ('l_sound_2', None), ('correct_2', None), ('order_1', 'di.wav'), ('order_2', 'bu.wav')])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
    Routine exposure
  LoopTerminator trials
